PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = soloproject
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = You will see some faces try to remember them
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  Routine phase1
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $study
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
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  Routine filler
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $sum
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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  Routine phase2
    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_2
      image [set every repeat] = $test
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 10
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study': 'C:\\Users\\Admin\\Desktop\\lab\\1n.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\2n.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\3n.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\4n.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\5n.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\6n.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\a1.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\a2.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\a3.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\a4.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\a5.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\a6.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\h1.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\h2.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\h4.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\h5.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\h6.png'},
      {'study': 'C:\\Users\\Admin\\Desktop\\lab\\h3.png'}]
    Routine phase1
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sum.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sum': '125-19'},
      {'sum': '637+94'},
      {'sum': '113-49'},
      {'sum': '586+76'},
      {'sum': '522+16'},
      {'sum': '273-87'}]
    Routine filler
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'C:\\Users\\Admin\\Desktop\\lab\\an1.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\an2.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\an3.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\an4.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\an5.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\an6.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\ha1.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\ha2.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\ha3.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\ha4.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\ha5.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\\ha6.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\ne1.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\ne2.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\ne3.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\ne4.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\ne5.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\ne6.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\na1.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\na2.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\na3.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\na4.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\na5.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\na6.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\nh1.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\nh2.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\nh3.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\nh4.png'},
      {'test': 'C:\\Users\\Admin\\Desktop\\lab\nh5.png'}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
    Routine phase2
  LoopTerminator trials_3
